#----------------------------------------------------------------------------------------------------
:start run control:
	ncase                = 1e10
	nbatch               = 1
	nchunk               = 1
	calculation          = first
	geometry error limit = 250
	egsdat file format   = text
:stop run control:
#----------------------------------------------------------------------------------------------------
:start run mode:
	run mode = superposition
:stop run mode:
#----------------------------------------------------------------------------------------------------
:start media definition:
	AE                 = 2.010
	UE                 = 2.011
	AP                 = 0.001
	UP                 = 1.500
	material data file = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/lib/media/material.dat
:stop media definition:
#----------------------------------------------------------------------------------------------------
:start geometry definition:
	:start geometry:
		name          = phantom
		library       = egs_glib
		type          = egsphant
		egsphant file = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/Peppa_breast.egsphant.gz
		density file  = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/lib/media/material.dat
	:stop geometry:

	:start geometry:
		name         = lib_source
		library      = egs_glib
		include file = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/lib/geometry/sources/Ir192_HDR/MBDCA-WG/MBDCA-WG_wrapped.geom
	:stop geometry:

	:start geometry:
		name          = ultimate_geom
		library       = egs_autoenvelope
		type          = EGS_ASwitchedEnvelope
		base geometry = phantom
		:start inscribed geometry:
			inscribed geometry name = lib_source
			:start transformations:
				include file = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/Peppa_breast
			:stop transformations:
			:start region discovery:
				action                           = discover
				density of random points (cm^-3) = 1e8
				include file                     = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/lib/geometry/sources/Ir192_HDR/MBDCA-WG/boundary.shape
			:stop region discovery:
		:stop inscribed geometry:
	:stop geometry:

	source geometries        = lib_source
	phantom geometries       = phantom
	simulation geometry      = ultimate_geom
	source envelope geometry = ultimate_geom
:stop geometry definition:
#----------------------------------------------------------------------------------------------------
:start volume correction:
	:start source volume correction:
		 correction type                  = none
		 density of random points (cm^-3) = 1e8
		 include file                     = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/lib/geometry/sources/Ir192_HDR/MBDCA-WG/boundary.shape
		 total coverage threshold %       = 99.9%
	:stop source volume correction:
:stop volume correction:
#----------------------------------------------------------------------------------------------------
:start source definition:
	:start source:
		name         = lib_source
		library      = egs_isotropic_source
		charge       = 0
		include file = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/lib/geometry/sources/Ir192_HDR/MBDCA-WG/MBDCA-WG.shape
		:start spectrum:
			type          = tabulated spectrum
			spectrum file = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/lib/spectra/Ir192_NNDC_2.6_line.spectrum
		:stop spectrum:
	:stop source:
	:start transformations:
		include file = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/Peppa_breast
	:stop transformations:
	source weights = 2.4 2.7 3.2 2.5 3.1 3 4.3 2.4 1.5 1.1 1 1.5 1.6 1.1 1.2 1 2.8 4.6 2.4 0.8 0.8 1.5 1.6 2.2 2.1 2.5 4.3 6.3 7.8 2.4 2.5 3.3 3.1 3.7 3.8 2.8 2.9 2.3 3.2 4 3 1.8 1.8 1.7 0.9 1.5 2.3 2.7 1.3 1 0.2 0.4 0.1 0.2 1.3 2.8 3 1.6 1 1 1.4 1.8 2.4 1.9 0.6 5.6 1 2.2 2 0.7 0.6 1.2 1.3 2 4.3 2.2 1.3 1.6 2.6
	simulation source = lib_source
:stop source definition:
#----------------------------------------------------------------------------------------------------
:start scoring options:
	score energy deposition = no
	muen file               = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/lib/muen/PeppaBreastHDR192Ir_MBDCA-WG_muen.muendat
	muen for media          = SKIN_1.09 AIR_0.0012 EXTERNAL_1.00 HEART_1.05 LUNGS_0.26 PTV_1.02 RIBS_1.92
	dose scaling factor     = 7.60726e+12
:stop scoring options:
#----------------------------------------------------------------------------------------------------
include file = /data/egs1/akbari/EGSnrc_CLRP/egs_home/egs_brachy/lib/transport/high_energy_default
#----------------------------------------------------------------------------------------------------
